
# -----------------------------------------------------------------------------
# Alias

# Need alias RADIONUCLIDE  => In111 or Tc99m or Lu177 or I131
# Need alias N             => ion activity in Bq 
# Need alias SPECT_RADIUS  => in cm (25 for example)

/control/alias HEAD_NB 1
/control/execute mac/alias.mac

# -----------------------------------------------------------------------------
# Geometry definition

/control/execute mac/verbose.mac
/control/execute mac/world.mac
/control/execute mac/phantom_ct.mac
/control/execute mac/spect.mac

# -----------------------------------------------------------------------------
# Physics

/control/execute mac/physics_list.mac
/control/execute mac/physics_cuts_world.mac
/control/execute mac/physics_cuts_phantom.mac
/control/execute mac/physics_cuts_spect.mac

# -----------------------------------------------------------------------------
# OUTPUT

/control/execute mac/output_stat.mac
/control/execute mac/nm670/output_projections_{RADIONUCLIDE}.mac
#/control/execute mac/output_listmode.mac

# -----------------------------------------------------------------------------
# INITIALISATION

/gate/run/initialize
#/control/execute mac/visu.mac

# -----------------------------------------------------------------------------
# SOURCE

/control/execute mac/source_vox.mac


# -----------------------------------------------------------------------------
# START

/control/execute mac/start_time.mac



